OpenViBE-Scenario

Generic stream reader => #0
  Filename = $env{sourcefile}
Input stimulations 1=#0.Output stream 3, Input stimulations 2=#0.Output stream 4 -> Stimulation multiplexer => #1
#0.Output stream 2 -> 0xc67a01dc Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> 0xc67a01dc Signal Decimation => #3
  Decimation factor = 4
Experiment information=#0.Output stream 1, Signal=#3, Stimulation=#1 -> GDF file writer
  Filename = $env{destfile}

Clock stimulator
  Interstimulation interval (in sec) = 1200
  Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
