OpenViBE-Scenario

Generic stream reader => #0
  Filename = $env{sourcefile}
Input stimulations 1=#0.Output stream 3, Input stimulations 2=#0.Output stream 4 -> Stimulation multiplexer
-> 0xc67a01dc CSV File Writer
  Filename = $env{destfile}-Stimulations
  Column separator = " "
  Use compression = true
#0.Output stream 2 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> CSV File Writer
  Filename = $env{destfile}
  Column separator = " "
  Use compression = true

Clock stimulator
  Interstimulation interval (in sec) = 1200
  Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
